PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Name': u'Leo'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        shuffleRows.ShuffleRows(file_input, file_output)
  Routine question
    TextComponent question_text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.09
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      text:
        La conclusione segue dalla premesse?


                SI                           NO
    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'a', 'l'
      startVal [time (s)] = 0.0
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  Routine arguments
    TextComponent text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1 +
        '\n\n' +
        'P2: ' + $premise2 +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1.replace('...', $TW) +
        '\n\n' +
        'P2: ' + $premise2.replace('...', $TW) +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentNumber': 1, 'TWType': u'V', 'premise2': u'Una ... \xe8 vivace ', 'premise1': u'La gioia \xe8 una ... ', 'ArgumentType': u'TPTC', 'CorrectAnswer': u'Y', 'TW': u'SAMBA', 'ArgumentBlock': u'P', 'conclusion': u'La gioia \xe8 vivace'},
      {'ArgumentNumber': 2, 'TWType': u'V', 'premise2': u'Una ... Scende dalla nave ', 'premise1': u'Il conforto \xe8 una ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u'SCIALUPPA', 'ArgumentBlock': u'P', 'conclusion': u'Il conforto scende dalla nave'},
      {'ArgumentNumber': 2, 'TWType': u'distrattore', 'premise2': u'Una ... \xe8 una donna sposata ', 'premise1': u'Luigi ha una ... ', 'ArgumentType': u'distrattore', 'CorrectAnswer': u'N', 'TW': u'MOGLIE', 'ArgumentBlock': u'P', 'conclusion': u'Luigi \xe8 una donna sposata'},
      {'ArgumentNumber': 1, 'TWType': u'distrattore', 'premise2': u'... \xe8 una scienza ', 'premise1': u'Franco studia ...  ', 'ArgumentType': u'distrattore', 'CorrectAnswer': u'Y', 'TW': u'MEDICINA', 'ArgumentBlock': u'P', 'conclusion': u'Franco studia una scienza'},
      {'ArgumentNumber': 2, 'TWType': u'L', 'premise2': u'Un ... consente il riposo ', 'premise1': u'La laurea \xe8 un ... ', 'ArgumentType': u'TPPC', 'CorrectAnswer': u'N', 'TW': u'APPRODO', 'ArgumentBlock': u'P', 'conclusion': u'La laurea consente il riposo'}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
    Routine arguments
    Routine feedback
    Routine question
  LoopTerminator trials
